'OCR related code
'### Serial Port ###

' Const SerialOCRI = 34
' Const SerialOCRR = 39 'RS232



'### Data Variables ###
Public RawOCRR As String * 500
Public BytesBuffer As String
Public StringOCRR As String * 1000


Public RawOCRI As String * 500
Public StringOCRI As String * 1000


'### Units ###
'### Tables ###
DataTable(FileHyperOCR,1,-1)
  DataInterval(0,0,Sec,10)
  Sample(1,StringOCRR,String)
  Sample(1,StringOCRI,String)
EndTable


'### Sampling ###
Sub SampleOCRR
  ' &5341 -> SA &0D0A -> CR LF
  Dim NBR ' Number of Bytes Returned  
  Dim X, Y
  
  WhereAmI = "Sample OCRR"
  
  SerialOpen(SerialOCRR,19200,3,0,800)
  
  Call TimerDelay_Sec(Pump_Timer, OCR_R_Delay_Sec)
  
  SerialFlush(SerialOCRR)
  StringOCRR = ""
  RawOCRR = ""
  
  For Y = 1 To 3
    SerialInRecord(SerialOCRR,RawOCRR,&H5341,0,&H0D0A,NBR,101)
    BytesBuffer = Hex(ASCII(RawOCRR(1,1,1)))
    If BytesBuffer = "54" Then
      SerialClose(SerialOCRR)
      For X = 1 To 393
        BytesBuffer = Hex(ASCII(RawOCRR(1,1,X)))
        If Len(BytesBuffer) = 1 Then
          BytesBuffer = "0" + BytesBuffer
        EndIf
        StringOCRR = StringOCRR + BytesBuffer
      Next X
      StringOCRR = "5341" + StringOCRR + "0D0A"
      ExitFor
    EndIf
    Delay(1,2,Sec)
  Next Y
  WhereAmI = "End OCRR"
EndSub


Sub SampleOCRI
  ' &5341 -> SA &0D0A -> CR LF
  Dim NBR ' Number of Bytes Returned
  Dim X, Y

  WhereAmI = "Sample OCRI"
  
  SerialOpen(SerialOCRI,19200,51,0,800)
  
  Call TimerDelay_Sec(Tower_Timer, OCR_I_Delay_Sec)
  
  SerialFlush(SerialOCRI)
  StringOCRI = ""
  RawOCRI = ""
  
  For Y = 1 To 3
    SerialInRecord(SerialOCRI,RawOCRI,&H5341,0,&H0D0A,NBR,101)
    BytesBuffer = Hex(ASCII(RawOCRI(1,1,1)))
    If BytesBuffer = "54" Then
      SerialClose(SerialOCRI)
      For X = 1 To 393
        BytesBuffer = Hex(ASCII(RawOCRI(1,1,X)))
        If Len(BytesBuffer) = 1 Then
          BytesBuffer = "0" + BytesBuffer
        EndIf
        StringOCRI = StringOCRI + BytesBuffer
      Next X
      StringOCRI = "5341" + StringOCRI + "0D0A"
      ExitFor
    EndIf
    Delay(1,2,Sec)
  Next Y
  WhereAmI = "End OCRI"
EndSub

Sub UpdateHyperOCRTable
  Scan(1,Sec, 0, 1)
  CallTable FileHyperOCR
  NextScan
EndSub


Sub SampleOCRs
  Dim update_OCRs_table = false
  
  If With_OCR_R AND Well_IsPowered Then
    WhereAmI = "Sample OCR R"
    Call SampleOCRR
    update_OCRs_table = true
  EndIf
  
  If With_OCR_I Then
    WhereAmI = "Sample OCR I"
    Call SampleOCRI
    update_OCRs_table = true
  EndIf
  

  If update_OCRs_table Then
    Call UpdateHyperOCRTable
    WhereAmI = "End OCR"
  EndIf
EndSub
